{load_file("stdlib.hoc")}
proc default_var() {localobj s, pc
	s = new String()
	if (name_declared($s1) == 0) {
		if (argtype(2) == 2) {
			sprint(s.s, "~strdef %s", $s1)
			execute(s.s)
			sprint(s.s, "%s = \"%s\"", $s1, $s2)
		}else{
			hoc_ac_ = $2
			sprint(s.s, "%s = hoc_ac_", $s1)
		}
		execute(s.s)
	}
	pc = new ParallelContext()
	if (pc.id == 0) {
		sprint(s.s, "print \"%s  \", %s", $s1, $s1)
		execute(s.s)
	}
}

default_var("sim_time", 10)
default_var("coreneuron", 0)
default_var("gpu", 0)
default_var("filemode", 0)
default_var("dumpmodel", 0)
default_var("pattern", "")

use_coreneuron = coreneuron
tstop = sim_time
